PsychoPy2experiment version="3.0.0b10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = Experiment1
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Routines
  Routine IntroText
    TextComponent Introtext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = (insert intro text here)
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    KeyboardComponent introkey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine HeartBeats
    SoundComponent heart
      sound = 'heart120.wav'
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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Flow
  Routine IntroText
  Routine HeartBeats
