PsychoPy2experiment version="3.0.0b10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  expName = HeartBeat1
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Routines
  Routine Introductory_Text
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        (insert desired text here)

        Press the space bar to continue
    KeyboardComponent intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Listening
    SoundComponent heartbeats
      sound [set every repeat] = $Sound
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
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    ImageComponent image
      image [set every repeat] = $img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine Wait
    TextComponent Wait3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine EndingRemarks
    TextComponent EndText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thanks for participating!
    KeyboardComponent EndKey
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Introductory_Text
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Exp1Conditions.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
      [OrderedDict([('Sound', 'heart120.wav')]),
      OrderedDict([('Sound', 'heart60.wav')])]
    Routine Listening
    Routine Wait
  LoopTerminator trials
  Routine EndingRemarks
