PsychoPy2experiment version="3.0.0b10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  expName = HeartBeat2_1
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Routines
  Routine Introductory_Text
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        (insert desired text here)

        Press the space bar to continue
    KeyboardComponent intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Listening
    SoundComponent heartbeats
      sound [set every repeat] = $sound
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
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    ImageComponent image
      image [set every repeat] = $pic
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine Wait
    TextComponent Wait3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine EndingRemarks
    TextComponent EndText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thanks for participating!
    KeyboardComponent EndKey
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Rate
    KeyboardComponent Answer
      allowedKeys = '1', '2', '3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent choice1
      letterHeight = 1.5
      pos = (0, 4)
      startVal [time (s)] = 0.0
      text [set every repeat] = '1.' + $c1
      units = cm
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    TextComponent choice2
      letterHeight = 1.5
      pos = (0, 2)
      startVal [time (s)] = 0.0
      units = cm
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      text [set every repeat]:
        '2.' + $c2
    TextComponent choice3
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      units = cm
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      text [set every repeat]:
        '3.' + $c3
    TextComponent choice4
      letterHeight = 1.5
      pos = (0, -2)
      startVal [time (s)] = 0.0
      units = cm
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      text [set every repeat]:
        '4.' + $c4
  Routine EmpRate
    TextComponent Question
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Rate on a scale of 1 to 5 how strongly you felt what this person felt.
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    KeyboardComponent EmpAnswer
      allowedKeys = '1', '2', '3', '4', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Introductory_Text
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Heart2Cond.xlsx
    loopType = sequential
    nReps = 1
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    Routine Listening
    Routine Rate
    Routine EmpRate
    Routine Wait
  LoopTerminator trials
  Routine EndingRemarks
