PsychoPy2experiment version="3.0.0b10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  expName = HeartBeat3
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Routines
  Routine Introductory_Text
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Intro text

        Press Spacebar to begin
    KeyboardComponent intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Listening
    SoundComponent heartbeats
      sound [set every repeat] = $sound
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      volume = 4
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    ImageComponent image
      image [set every repeat] = $pic
      pos = (0, 2)
      size = (20, 14)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent Answer1
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent Choice1
      letterHeight = 1.5
      pos = (-12, 13)
      startVal [time (s)] = 0.0
      text [set every repeat] = '1.' + $c1
      units = cm
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    TextComponent Choice2
      letterHeight = 1.5
      pos = (12, 13)
      startVal [time (s)] = 0.0
      text [set every repeat] = '2.' + $c2
      units = cm
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    TextComponent Choice3
      letterHeight = 1.5
      pos = (-12, -9)
      startVal [time (s)] = 0.0
      text [set every repeat] = '3.' + $c3
      units = cm
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    TextComponent Choice4
      letterHeight = 1.5
      pos = (12, -9)
      startVal [time (s)] = 0.0
      text [set every repeat] = '4.' + $c4
      units = cm
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    TextComponent Chosen
      letterHeight = 1.5
      pos = (0, -11)
      startVal [time (s)] = 0.0
      text [set every frame] = $Answer1.keys
      units = cm
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    TextComponent YourChoice
      letterHeight = 1.5
      pos = (0, -9)
      startVal [time (s)] = 0.0
      text = Your Choice:
      units = cm
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    TextComponent twentysec
      letterHeight = 1.5
      pos = (-17, 1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5
      text = 20
      units = cm
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    TextComponent FifteenSec
      letterHeight = 1.5
      pos = (-17, 1)
      startVal [time (s)] = 5
      stopVal [time (s)] = 10
      text = 15
      units = cm
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    TextComponent TenSec
      letterHeight = 1.5
      pos = (-17, 1)
      startVal [time (s)] = 10
      stopVal [time (s)] = 15
      text = 10
      units = cm
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    TextComponent FiveSec
      letterHeight = 1.5
      pos = (-17, 1)
      startVal [time (s)] = 15
      stopVal [time (s)] = 20
      text = 5
      units = cm
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    TextComponent Timer
      letterHeight = 1.5
      pos = (-17, 3)
      startVal [time (s)] = 0.0
      text = Seconds left:
      units = cm
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    TextComponent ZeroSec
      letterHeight = 1.5
      pos = (-17, 1)
      startVal [time (s)] = 20
      text = 0
      units = cm
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  Routine Wait
    TextComponent Wait3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine EndingRemarks
    TextComponent EndText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thanks for participating!
    KeyboardComponent EndKey
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Rate
    KeyboardComponent Answer
      allowedKeys = '1', '2', '3','4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent choice1
      letterHeight = 1.5
      pos = (0, 4)
      startVal [time (s)] = 0
      text [set every repeat] = '1.' + $c1
      units = cm
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    TextComponent choice2
      letterHeight = 1.5
      pos = (0, 2)
      startVal [time (s)] = 0
      units = cm
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      text [set every repeat]:
        '2.' + $c2
    TextComponent choice3
      letterHeight = 1.5
      startVal [time (s)] = 0
      units = cm
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      text [set every repeat]:
        '3.' + $c3
    TextComponent choice4
      letterHeight = 1.5
      pos = (0, -2)
      startVal [time (s)] = 0
      units = cm
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      text [set every repeat]:
        '4.' + $c4
    TextComponent chosen
      letterHeight = 1.5
      pos = (0,-4)
      startVal [time (s)] = 0
      units = cm
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      text [set every frame]:
        $Answer.keys
  Routine EmpRate
    TextComponent Question
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Rate how well you felt what they were feeling:
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    RatingScaleComponent rating
      categoryChoices = 1, 2, 3, 4, 5
      forceEndRoutine = True
      high = 5
      labels = Not well at all, Extremely Well
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
      tickHeight = 1
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  Routine Break
    TextComponent BreakText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = Take a five minute break
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Flow
  Routine Introductory_Text
  LoopInitiator trialsListen loopType="TrialHandler"
    conditionsFile = ExpListenCond.xlsx
    loopType = fullRandom
    nReps = 1
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    Routine Listening
    Routine EmpRate
    Routine Wait
  LoopTerminator trialsListen
  Routine Break
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Heart2Cond.xlsx
    loopType = sequential
    nReps = 1
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    Routine Listening
    Routine EmpRate
    Routine Wait
  LoopTerminator trials
  Routine Break
  Routine EndingRemarks
