PsychoPy2experiment version="3.0.0b10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = test
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Routines
  Routine trial
    RatingScaleComponent rating
      categoryChoices = 1, 2, 3, 4, 5
      forceEndRoutine = True
      high = 5
      labels = Not well at all, Extremly well
      low = 1
      markerStart = 1
      pos = 0, -0.4
      size = 1
      startVal [time (s)] = 0.0
      tickHeight = 1
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Rate how well you felt what they were feeling:
  Routine h
    cedrusButtonBoxComponent buttonBox
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
Flow
  Routine trial
  Routine h
