PsychoPy2experiment version="3.0.0b10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine WelcomeScreen
    TextComponent WelcomeText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Hello!

        Welcome to my experiment!
        To continue, presst the space bar.
    KeyboardComponent welcomeKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Wait500
  Routine Test
Flow
  Routine WelcomeScreen
  Routine Wait500
  Routine Test
